%YAML 1.1
---
# yaml-language-server: $schema=https://raw.githubusercontent.com/harp-tech/reflex-generator/main/schema/device.json
device: AnalogInput
whoAmI: 1236
firmwareVersion: "1.0"
hardwareTargets: "1.0"
registers:
  StartAcquisition:
    address: 32
    access: Write
    type: U8
    maskType: EnableFlag
    description: Enables the data acquisition.
  AnalogData:
    address: 33
    type: S16
    length: 4
    access: Event
    description: Value from a single read of all ADC channels.
    payloadSpec:
      Channel0:
        offset: 0
      Channel1:
        offset: 1
      Channel2:
        offset: 2
      Channel3:
        offset: 3
  DI0:
      address: 34
      access: Event
      type: U8
      maskType: DigitalState
      description: State of the digital input pin 0.
  Reserved0: &ReservedReg
      address: 35
      access: Read
      visibility: private
      type: U8
      description: Reserved
  Reserved1:
      <<: *ReservedReg
      address: 36
  RangeAndFilterCutoff:
      address: 37
      access: Write
      type: U8
      maskType: RangeAndFilterConfig
      description: Sets the range and LowPass filter cutoff of the ADC.
  SamplingFrequency:
      address: 38
      access: Write
      type: U8
      maskType: SamplingFrequencyConfig
      description: Sets the sampling frequency of the ADC.
  DI0Mode:
      address: 39
      access: Write
      type: U8
      maskType: DI0ModeConfig
      description: Configuration of the digital input pin 0.
  DO0Mode:
      address: 40
      access: Write
      type: U8
      maskType: DO0ModeConfig
      description: Configuration of the digital output pin 0.
  DO0PulseDuration:
      address: 41
      access: Write
      type: U8
      minValue: 1
      maxValue: 255
      description: Pulse duration (ms) for the digital output pin 0. The pulse will only be emitted when DO0Mode == Pulse.
  DOSet: &output
    address: 42
    type: U8
    access: Write
    maskType: DigitalOutputs
    description: Set the specified digital output lines.
  DOClear:
    <<: *output
    address: 43
    description: Clear the specified digital output lines.
  DOToggle:
    <<: *output
    address: 44
    description: Toggle the specified digital output lines
  DOState:
    <<: *output
    address: 45
    access: [Write, Event]
    description: Write the state of all digital output lines. An event will be emitted when the value of any pin was changed by a threshold crossing event.
  Reserved2:
      <<: *ReservedReg
      address: 46
  Reserved3:
      <<: *ReservedReg
      address: 47
  AcquisitionStartDO:
      address: 48
      access: Write
      type: U8
      maskType: AcquisitionStartDOTargets
      description: Digital output that will be set when the acquisition starts.
  Reserved4:
      <<: *ReservedReg
      address: 49
  Reserved5:
      <<: *ReservedReg
      address: 50
  Reserved6:
      <<: *ReservedReg
      address: 51
  Reserved7:
      <<: *ReservedReg
      address: 52
  Reserved8:
      <<: *ReservedReg
      address: 53
  Reserved9:
      <<: *ReservedReg
      address: 54
  Reserved10:
      <<: *ReservedReg
      address: 55
  Reserved11:
      <<: *ReservedReg
      address: 56
  Reserved12:
      <<: *ReservedReg
      address: 57
  DO0TargetChannel: &targetchannel
      address: 58
      access: Write
      type: U8
      maskType: ThresholdOnAdc
      visibility: private
      description: Target channel that will be used to trigger a threshold event on DO0 pin.
  DO1TargetChannel:
      <<: *targetchannel
      address: 59
      description: Target channel that will be used to trigger a threshold event on DO1 pin.
  DO2TargetChannel:
      <<: *targetchannel
      address: 60
      description: Target channel that will be used to trigger a threshold event on DO2 pin.
  DO3TargetChannel:
      <<: *targetchannel
      address: 61
      description: Target channel that will be used to trigger a threshold event on DO3 pin.
  Reserved13:
      <<: *ReservedReg
      address: 62
  Reserved14:
      <<: *ReservedReg
      address: 63
  Reserved15:
      <<: *ReservedReg
      address: 64
  Reserved16:
      <<: *ReservedReg
      address: 65
  DO0Threshold: &thresholdvalue
        address: 66
        access: Write
        type: S16
        visibility: private
        description: Value used to threshold an ADC read, and trigger DO0 pin.
  DO1Threshold:
        <<: *thresholdvalue
        address: 67
        description: Value used to threshold an ADC read, and trigger DO1 pin.
  DO2Threshold:
        <<: *thresholdvalue
        address: 68
        description: Value used to threshold an ADC read, and trigger DO2 pin.
  DO3Threshold:
        <<: *thresholdvalue
        address: 69
        description: Value used to threshold an ADC read, and trigger DO3 pin.
  Reserved17:
      <<: *ReservedReg
      address: 70
  Reserved18:
      <<: *ReservedReg
      address: 71
  Reserved19:
      <<: *ReservedReg
      address: 72
  Reserved20:
      <<: *ReservedReg
      address: 73
  DO0BufferRisingEdge: &bufferedthreshold
      address: 74
      access: Write
      type: U16
      visibility: private
      defaultValue: 0
      description: Time (ms) above threshold value that is required to trigger a DO0 pin event.
  DO1BufferRisingEdge:
      <<: *bufferedthreshold
      address: 75
      description: Time (ms) above threshold value that is required to trigger a DO1 pin event.
  DO2BufferRisingEdge:
      <<: *bufferedthreshold
      address: 76
      description: Time (ms) above threshold value that is required to trigger a DO2 pin event.
  DO3BufferRisingEdge:
      <<: *bufferedthreshold
      address: 77
      description: Time (ms) above threshold value that is required to trigger a DO3 pin event.
  Reserved21:
      <<: *ReservedReg
      address: 78
  Reserved22:
      <<: *ReservedReg
      address: 79
  Reserved23:
      <<: *ReservedReg
      address: 80
  Reserved24:
      <<: *ReservedReg
      address: 81
  DO0BufferFallingEdge:
      <<: *bufferedthreshold
      address: 82
      visibility: private
      description: Time (ms) below threshold value that is required to trigger a DO0 pin event.
  DO1BufferFallingEdge:
      <<: *bufferedthreshold
      address: 83
      description: Time (ms) below threshold value that is required to trigger a DO1 pin event.
  DO2BufferFallingEdge:
      <<: *bufferedthreshold
      address: 84
      description: Time (ms) below threshold value that is required to trigger a DO2 pin event.
  DO3BufferFallingEdge:
      <<: *bufferedthreshold
      address: 85
      description: Time (ms) below threshold value that is required to trigger a DO3 pin event.
  Reserved25:
      <<: *ReservedReg
      address: 86
  Reserved26:
      <<: *ReservedReg
      address: 87
  Reserved27:
      <<: *ReservedReg
      address: 88
  Reserved28:
      <<: *ReservedReg
      address: 89
  Reserved29:
      <<: *ReservedReg
      address: 90
bitMasks:
  DigitalOutputs:
    description: Specifies the state of port digital output lines.
    bits:
      DO0: 0x1
      DO1: 0x2
      DO2: 0x4
      DO3: 0x8
      DO0Changed: 0x10
      DO1Changed: 0x20
      DO2Changed: 0x40
      DO4Changed: 0x80
groupMasks:
  EnableFlag:
    description: The state of an abstract functionality.
    values:
      Disabled: 0
      Enabled: 1
  DigitalState:
    description: The state of a digital input pin.
    values:
      Low: 0
      High: 1
  RangeAndFilterConfig:
    description: The available settings for set the range and LowPass filter cutoff of the ADC.
    values:
      Range5V_LowPass1k5Hz: 0x06
      Range5V_LowPass3kHz: 0x05
      Range5V_LowPass6kHz: 0x04
      Range5V_LowPass10k3Hz: 0x03
      Range5V_LowPass13k7Hz: 0x02
      Range5V_LowPass15kHz: 0x01
      Range10V_LowPass1k5Hz: 0x16
      Range10V_LowPass3kHz: 0x15
      Range10V_LowPass6kHz: 0x14
      Range10V_LowPass11k9Hz: 0x13
      Range10V_LowPass18k5Hz: 0x12
      Range10V_LowPass22kHz: 0x11
  SamplingFrequencyConfig:
    description: The available settings for set the sampling frequency of the ADC.
    values:
      Frequency1k: 0x00
      Frequency2k: 0x01
  DI0ModeConfig:
    description: Available configurations for DI0 pin.
    values:
      Input: 0
      StartOnRisingEdge: 1
      StartOnFallingEdge: 2
      SampleOnRisingEdge: 3
      SampleOnFallingEdge: 4
  DO0ModeConfig:
    description: Available configurations for DO0 pin.
    values:
      Output: 0
      ToggleEachSecond: 1
      Pulse: 2
  AcquisitionStartDOTargets:
    description: Available digital output pins that are able to be triggered on acquisition start.
    values:
      None: 0
      DO0: 1
      DO1: 2
      DO2: 3
      DO3: 4
  ThresholdOnAdc:
    description: Available target analog channels to be targeted for threshold events.
    values:
      Channel0: 0
      Channel1: 1
      Channel2: 2
      Channel3: 3
      None: 8