<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM12</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>33</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedS16</harp:Type>
        <harp:IsArray>true</harp:IsArray>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CommandsSubject</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Q - Start</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Q</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>W - Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>W</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetSampleFrequency</Name>
        <Description>0 - 1KHz
1 - 2KHz</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>38</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetDi0Config</Name>
        <Description>0 - Digital
1 - Rise to start / Fall to stop
2 - Fall to start / Rise to stop
3 - Rise for a sample
4 - Fall for a sample
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>39</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetTriggerDestiny</Name>
        <Description>0 - None
1 - DO0
2 - DO1
3 - DO2
4 - DO3
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>48</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetRangeAndInputFilter</Name>
        <Description>group_mask	0x06	5V_1K5
group_mask	0x05	5V_3K
group_mask	0x04	5V_6K
group_mask	0x03	5V_10K3
group_mask	0x02	5V_13K7
group_mask	0x01	5V_15K
group_mask	0x16	10V_1K5
group_mask	0x15	10V_3K
group_mask	0x14	10V_6K
group_mask	0x13	10V_11K9
group_mask	0x12	10V_18K5
group_mask	0x11	10V_22K
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>37</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>6</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetDOConf</Name>
        <Description>0 - Software
1 - Toggle each second
2 - Pulse when write to logic 1
</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>40</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EventDI0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>34</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EventAnalogInputs</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>33</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>S16</harp:Type>
              <harp:IsArray>true</harp:IsArray>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Index" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EventDOWrite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>45</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="8" To="13" Label="Source1" />
      <Edge From="9" To="13" Label="Source2" />
      <Edge From="10" To="13" Label="Source3" />
      <Edge From="11" To="13" Label="Source4" />
      <Edge From="12" To="13" Label="Source5" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>